#pragma rtGlobals=1		// Use modern global access method.

//-------------------------------------------------------------------------------------------------------------------------------------------------------------

Function Size_dist(w,D) : FitFunc	// Double log-normal
	Wave/D w
	Variable D

	Variable fwhm=w[3]
	
	Return 1/D/((1/sqrt(2*ln(2))*asinh(fwhm/2/w[2]))*sqrt(pi*2))*exp(-1/2*((ln(D)-ln(w[2]))^2)/(1/sqrt(2*ln(2))*asinh(fwhm/2/w[2]))^2)+abs(w[9])/D/((1/sqrt(2*ln(2))*asinh(w[11]/2/w[10]))*sqrt(pi*2))*exp(-1/2*((ln(D)-ln(w[10]))^2)/(1/sqrt(2*ln(2))*asinh(w[11]/2/w[10]))^2)
End

//-------------------------------------------------------------------------------------------------------------------------------------------------------------
